// **INFO** //
// version: 07/2025 
// loops through files in a directory and sets auto brightness and contrast to those with only one slice
// author: Ted Aplin

#@ File (label = "Select folder with data", style="directory") input //defines folder with raw data

//cleanup
setBatchMode(true);
close("*");

//creates a list of only specific fileformat files

list = getFileList(input);
fileList = newArray(0);
for (l = 0; l < list.length; l++) {
   	if (endsWith(list[l], ".tif"))
   	fileList = Array.concat(fileList, list[l]);
}

//stops if there are no suitable files
if (fileList.length == 0) {
	exit("I am missing my purpose! (no .lif files in input directory)");
}

//the macro
for (b = 0; b < fileList.length; b++) {
	name=fileList[b];
	fname_with_path = input + File.separator +fileList[b];
	run("Bio-Formats Macro Extensions");
	run("Bio-Formats Importer", "open=["+ fname_with_path + "] color_mode=Default rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT series_1 use_virtual_stack");
	if (nSlices == 1) {
		print("Analyzing Image " + name);
		run("Brightness/Contrast...");
		run("Enhance Contrast", "saturated=0.35");
		save(fname_with_path);
		close("*");
	}
}
showMessage("And God said 'Let there be light!'");


